CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "masks")
    Name to assign these images:mask
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "AAG")
    Name to assign these images:AAG
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Krt5")
    Name to assign these images:KRT5
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MDK")
    Name to assign these images:MDK
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "LAMB1")
    Name to assign these images:LAMB1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "HAPLN3")
    Name to assign these images:HAPLN3
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "METLL")
    Name to assign these images:METLL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "KRT17")
    Name to assign these images:KRT17
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "THBS1")
    Name to assign these images:THBS1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ROI")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ConvertImageToObjects:[module_num:5|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
    Select the input image:mask
    Name the output object:ConvertImageToObjects
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ExpandOrShrinkObjects:[module_num:6|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
    Select the input objects:ConvertImageToObjects
    Name the output objects:ShrunkenNucleiDMSO
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:5
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:AAG
    Name the primary objects to be identified:C1dotcountsAAG
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MDK
    Name the primary objects to be identified:C2dotcountsMDK
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:KRT5
    Name the primary objects to be identified:C3dotcountsKRT5
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:THBS1
    Name the primary objects to be identified:C4dotcountsTHBS1
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:11|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C1dotcountsAAG
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:12|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C2dotcountsMDK
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:13|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C3dotcountsKRT5
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:14|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C4dotcountsTHBS1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:HAPLN3
    Name the primary objects to be identified:C1dotcountsHAPLN3
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.03,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:METLL
    Name the primary objects to be identified:C2dotcountsMETLL
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.01,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:LAMB1
    Name the primary objects to be identified:C3dotcountsLAMB1
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifyPrimaryObjects:[module_num:18|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
    Select the input image:KRT17
    Name the primary objects to be identified:C4dotcountsKRT17
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:.02,1.0
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    Two-class or three-class thresholding?:Two classes
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
RelateObjects:[module_num:19|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C1dotcountsHAPLN3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C2dotcountsMETLL
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:21|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C3dotcountsLAMB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:22|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
    Parent objects:ShrunkenNucleiDMSO
    Child objects:C4dotcountsKRT17
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureObjectSizeShape:[module_num:23|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
    Select objects to measure:ShrunkenNucleiDMSO
    Calculate the Zernike features?:Yes

ExportToSpreadsheet:[module_num:24|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\HCR manuscript qualitative data analysis\\Results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:ShrunkenNucleiDMSO|Number_Object_Number,ShrunkenNucleiDMSO|Children_C1dotcountsHAPLN3_Count,ShrunkenNucleiDMSO|Children_C4dotcountsTHBS1_Count,ShrunkenNucleiDMSO|Children_C2dotcountsMDK_Count,ShrunkenNucleiDMSO|Children_C4dotcountsKRT17_Count,ShrunkenNucleiDMSO|Children_C3dotcountsLAMB1_Count,ShrunkenNucleiDMSO|Children_C1dotcountsAAG_Count,ShrunkenNucleiDMSO|Children_C2dotcountsMETLL_Count,ShrunkenNucleiDMSO|Children_C3dotcountsKRT5_Count,ShrunkenNucleiDMSO|AreaShape_Area
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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